PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
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Routines
  Routine trial
    ImageComponent picture1
      image = path1
      pos = (0.4, 0.25)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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    ImageComponent picture2
      image = path2
      pos = (-0.4, -0.25)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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    ImageComponent picture3
      image = path3
      pos = (-0.4, 0.25)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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    ImageComponent picture4
      image = path4
      pos = (0.4, -0.25)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        picture_list = list(range(1, 51))
        novel_list = list(range(1, 51))
        non_novel_list = []
        n = [0, 1, 2, 3, 4]
        p_rich = [0.3, 0.3, 0.2, 0.1, 0.1]
        p_scarce = [0.1, 0.1, 0.2, 0.3, 0.3]
      Begin Routine:
        n_novel = int(np.random.choice(n, 1, p_rich))
        n_non_novel = 4 - n_novel

        chosen_novel = np.random.choice(novel_list, n_novel, replace=False)
        chosen_non_novel = np.random.choice(non_novel_list, n_non_novel, replace=False)

        chosen_novel = list(chosen_novel)
        chosen_non_novel = list(chosen_non_novel)
        np.random.shuffle(chosen_novel)
        np.random.shuffle(chosen_non_novel)

        print(chosen_novel, chosen_non_novel)
        showing = np.concatenate((chosen_novel, chosen_non_novel))

        showing_1 = int(showing[0])
        showing_2 = int(showing[1])
        showing_3 = int(showing[2])
        showing_4 = int(showing[3])

        path1 = os.path.joint('pictures', showing_1, '.jpg')
        path2 = os.path.joint('pictures', showing_2, '.jpg')
        path3 = os.path.joint('pictures', showing_3, '.jpg')
        path4 = os.path.joint('pictures', showing_4, '.jpg')
      End Routine:
        non_novel_list = np.concatenate((non_novel_list, chosen_novel))
        novel_list = [x for x in novel_list if x not in chosen_novel]
  Routine welcome
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to our experiment!

        Press "space" to continue.
    KeyboardComponent welcome_key_resp
      allowedKeys = 'space', 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trainning
    ImageComponent training_picture1
      image = pictures/1.jpg
      pos = (0.4, 0.25)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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    ImageComponent training_picture2
      image = pictures/2.jpg
      pos = (-0.4, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent traning_picture3
      image = pictures/3.jpg
      pos = (-0.4, 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent training_picture4
      image = pictures/4.jpg
      pos = (0.4, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        # test

        chosen_novel = np.random.choice(novel_list, 4, replace=False)
        np.random.shuffle(chosen_novel)

        showing = chosen_novel
        showing_1 = int(showing[0])
        showing_2 = int(showing[1])
        showing_3 = int(showing[2])
        showing_4 = int(showing[3])

        path1 = os.path.joint('pictures', showing_1, '.jpg')
        path2 = os.path.joint('pictures', showing_2, '.jpg')
        path3 = os.path.joint('pictures', showing_3, '.jpg')
        path4 = os.path.joint('pictures', showing_4, '.jpg')
      End Routine:
        non_novel_list = np.concatenate((non_novel_list, chosen_novel))
        novel_list = [x for x in novel_list if x not in chosen_novel]
Flow
  Routine welcome
  LoopInitiator trainings loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trainning
  LoopTerminator trainings
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
